CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:frame_(?P<FrameNumber>\d+)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Cell
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Series

ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Cell
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.4,1.0
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    Log transform before thresholding?:No
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
TrackObjects:[module_num:7|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
    Choose a tracking method:Overlap
    Select the objects to track:IdentifyPrimaryObjects
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:No
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:1
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|TestingOutput
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifyPrimaryObjects|TrackObjects_Label_50,IdentifyPrimaryObjects|TrackObjects_ParentObjectNumber_50,IdentifyPrimaryObjects|TrackObjects_IntegratedDistance_50,IdentifyPrimaryObjects|TrackObjects_DistanceTraveled_50,IdentifyPrimaryObjects|TrackObjects_Linearity_50,IdentifyPrimaryObjects|TrackObjects_TrajectoryX_50,IdentifyPrimaryObjects|TrackObjects_TrajectoryY_50,IdentifyPrimaryObjects|TrackObjects_FinalAge_50,IdentifyPrimaryObjects|TrackObjects_Lifetime_50,IdentifyPrimaryObjects|TrackObjects_ParentImageNumber_50,IdentifyPrimaryObjects|TrackObjects_Displacement_50,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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